<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
          <q1:NumBuffers>10</q1:NumBuffers>
          <q1:GrabMode>BufferFrames</q1:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Both</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>1</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
          <q1:NumBuffers>10</q1:NumBuffers>
          <q1:GrabMode>BufferFrames</q1:GrabMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>5</cv:Y>
            <cv:Width>448</cv:Width>
            <cv:Height>204</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>245</cv:Y>
            <cv:Width>448</cv:Width>
            <cv:Height>244</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Second</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Millisecond</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\runrig\Desktop\experiment_data\trialInfo.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video2</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\runrig\Desktop\experiment_data\wisk.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Millisecond</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\runrig\Desktop\experiment_data\run.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>178</cv:Y>
            <cv:Width>632</cv:Width>
            <cv:Height>234</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\runrig\Desktop\experiment_data\webCam.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.Millisecond</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\runrig\Desktop\experiment_data\webCam.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="scr:PythonTransform">
        <scr:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix

filename = 'E:\\bonsaiVid\\runTop.mp4'

def process(value):
  os.system(r'ffmpeg -f rawvideo -y -vcodec rawvideo -s 448x448 -r 250 -pix_fmt gray -i \\.\pipe\video1 -f rawvideo -y -vcodec rawvideo -s 336x380 -r 250 -pix_fmt gray -i \\.\pipe\video2 -map 0 -vcodec mpeg4 -pix_fmt yuv420p -vb 10M C:\\Users\\runrig\\Desktop\\experiment_data\\run.mp4 -map 1 -vcodec mpeg4 -pix_fmt yuv420p -vb 10M -vf "lutrgb=y=negval:u=negval:v=negval" C:\\Users\\runrig\\Desktop\\experiment_data\\runWisk.mp4')</scr:Script>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="24" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="30" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="34" Label="Source1" />
      <Edge From="4" To="35" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="32" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="41" Label="Source1" />
      <Edge From="7" To="43" Label="Source1" />
      <Edge From="7" To="44" Label="Source1" />
      <Edge From="7" To="48" Label="Source2" />
      <Edge From="7" To="53" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="39" Label="Source1" />
      <Edge From="13" To="48" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="53" Label="Source1" />
      <Edge From="15" To="57" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="21" To="24" Label="Source2" />
      <Edge From="21" To="30" Label="Source2" />
      <Edge From="21" To="37" Label="Source2" />
      <Edge From="21" To="32" Label="Source2" />
      <Edge From="21" To="55" Label="Source2" />
      <Edge From="21" To="51" Label="Source2" />
      <Edge From="21" To="46" Label="Source2" />
      <Edge From="21" To="39" Label="Source2" />
      <Edge From="21" To="57" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="28" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source3" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="45" Label="Source1" />
      <Edge From="43" To="45" Label="Source2" />
      <Edge From="44" To="45" Label="Source3" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>