<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q3="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q4="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ImageWriter">
          <q1:Path>\\.\pipe\video</q1:Path>
          <q1:Suffix>None</q1:Suffix>
          <q1:Overwrite>false</q1:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT0S</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:PythonTransform">
        <q2:Script>import os
import clr
clr.AddReference("Bonsai.System")
from Bonsai.IO import PathHelper, PathSuffix

filename = 'E:\\bonsaiVid\\runTop.mp4'

def process(value):
  os.system(r'ffmpeg -f rawvideo -vcodec rawvideo -y -s 416x456 -r 250 -pix_fmt gray -i \\.\pipe\video -vcodec mpeg4 -pix_fmt gray -vb 2M -filter:v "crop=416:146:1:48" E:\\bonsaiVid\\runTop.mp4 -vcodec mpeg4 -pix_fmt gray -vb 2M -filter:v "crop=416:230:1:216" E:\\bonsaiVid\\runBot.mp4')</q2:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:FlyCapture">
          <q3:Index>0</q3:Index>
          <q3:ColorFormat>Bgr</q3:ColorFormat>
          <q3:ColorProcessing>Default</q3:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp.Millisecond</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q4:CsvWriter">
        <q4:FileName>E:\bonsaiVid\run.csv</q4:FileName>
        <q4:Append>false</q4:Append>
        <q4:Overwrite>true</q4:Overwrite>
        <q4:Suffix>None</q4:Suffix>
        <q4:IncludeHeader>false</q4:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>E:\bonsaiVid\runAll.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>true</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>250</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source3</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>