<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>E:\bonsaiVid\tset.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>true</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>250</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlyCapture">
          <q2:Index>0</q2:Index>
          <q2:ColorFormat>Bgr</q2:ColorFormat>
          <q2:ColorProcessing>Default</q2:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp.Millisecond</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>E:\bonsaiVid\run.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>